// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation" "CorrespondingPointsEuclideanDistanceMetric")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 5)
// default pyramid schedule


// ********** Transform

(FinalGridSpacingInPhysicalUnits 10.0 10.0 10.0)
(GridSpacingSchedule 16.0 8.0 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")

//Save composite ITK transform
(ITKTransformOutputFileNameExtension "h5")
(WriteITKCompositeTransform "true")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric

// Just using the default values for the NC metric
// Just using the default values for the cp metric

(Metric0RelativeWeight 1.0)
(Metric1RelativeWeight 1.0 1.0 1.0 1.0 0.1)
(UseRelativeWeights "true")


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(SampleRegionSize 50.0 50.0 50.0)
(MaximumNumberOfSamplingAttempts 50)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

