// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")

// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "EulerTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 4)


// ********** Transform

(HowToCombineTransforms "Compose")

//Save composite ITK transform
(ITKTransformOutputFileNameExtension "h5")
(WriteITKCompositeTransform "true")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000 1000 1000 1500)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")

(AutomaticScalesEstimation "true")


// ********** Metric

// Just using the default values for the NC metric


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(SampleRegionSize 50.0 50.0 50.0)
(MaximumNumberOfSamplingAttempts 10)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

