// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedNormalizedCorrelation")
(Optimizer "AdaptiveStochasticGradientDescent")
//(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "SimilarityTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 5)
(ImagePyramidSchedule 8 8 8 8 8 8 4 4 4 2 2 2 1 1 1)

// ********** Transform

(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 500)
//(MaximumNumberOfIterations 1000)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")


// ********** Metric

// Just using the default values for the NC metric



// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "true")
(CompressResultImage "false")
(ResultImageFormat "mhd")
(ShowExactMetricValue "false")
(ErodeMask "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 2000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

